PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data file delimiter = tab
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = expMonitor
  Save csv file = True
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = BAP_NEW_IAT
  keyboardBackend = ioHub
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Routines
  Routine general_instruction
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    TextComponent text_generalinst
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to IAT!

        Aşağıda 4 grup ve her gruba ait öğeler vardır:

        İyi : Şahane, Güzel, Sevimli, Mutlu, Hoş, Sevgi, Zafer, Memnun

        Kötü : Hata, Felaket, Izdırap, Yaramaz, Korkunç, İğrenç, Şeytani, Çirkin

        Başı örtülü Yüzler: Başı örtülü yüzler göreceksiniz - Örtülü

        Başı örtülü olmayan Yüzler :Başı örtülü olmayan yüzler göreceksiniz- Örtüsüz

        Devam etmek için boşluk tuşuna basın !
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok1_instruction1
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    TextComponent text_blok1_instruction1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Başı örtüsüz yüzler için E kullanılacak.

        Başı örütülü yüzler için I kullanılacak.

        Eğer cevabınız yanlış ise siyah "X" işaretiyle karşılacaksınız. Doğru yaptığınız zaman bir sonraki denemeye geçeceksiniz !


        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_intr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_uncovered0
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    TextComponent text_Covered0
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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  Routine Blok_1_Main
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    ImageComponent target_image_blok1
      image [set every repeat] = $ImageFile
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok1_main
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_uncovered_main
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    TextComponent text_covered_main
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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    CodeComponent code_1
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok1_main.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok_1_feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok1_main.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine rep_blok1
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    ImageComponent image_blok1_rep
      image [set every repeat] = $ImageFile
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok1_rep
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_rep_uncovered
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    TextComponent text_rep_covered
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok1_rep.corr == 1:
            rep_fdb2 = 0
            trials_3.finished = True
        else:
            rep_fdb2 = 1
  Routine blok_1_1_feedback
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok1_rep.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine blok2_instruction
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    TextComponent text_blok2_inst
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Eğer ekranda beliren sıfat

        İyi kategorisindeyse  - E

        kötü kategorisindeyse - I

        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_blok2_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blok_2_Main
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    ImageComponent image_block2_main
      image [set every repeat] = $wordpic
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok2_main
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_attractive_main
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = İyi
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    TextComponent text_unattractive_main
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Kötü
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok2_main.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok_2_feedback
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok2_main.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine rep_blok2
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    ImageComponent image_block2_rep
      image [set every repeat] = $wordpic
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok2_rep
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_attractive_rep
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = İyi
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    TextComponent text_unattractive_rep
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Kötü
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok2_rep.corr == 1:
            rep_fdb2 = 0
            trials_6.finished = True
        else:
            rep_fdb2 = 1
  Routine blok_2_1_feedback
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok2_rep.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine blok_3_main1
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    ImageComponent target_image_blok3
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok3_main_1
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_uncoveredattr_main
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtüsüz
        +
        İyi
    TextComponent text_coveredunattr_main
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtülü
        +
        Kötü
    CodeComponent code_10
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok3_main_1.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok_3_instruction
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    TextComponent text_blok3_ins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ekranda beliren uyaran,

        Örtüsüz yada İyi ise - E

        Örtülü yada Kötü - I

        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_blok3_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok_3_main2
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    TextComponent text_block3_main2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordss[word_order[cur_words]]
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    KeyboardComponent key_resp_blok3_main2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_uncoveredattr_main2
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Uncovered
           or
        Attractive
    TextComponent text_coveredunattr_main2
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Covered
           or
        Unattractive
    CodeComponent code_12
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok3_main2.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok_3_feedback
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  Routine blok_3_main2_feedback
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok3_main2.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb_4
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine blok3_main1_feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok3_main_1.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine blok3_main1_rep
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    ImageComponent image_blok3_main1_rep
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok3_main1_rep
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_uncoveredattr_main_rep
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtüsüz
        +
        İyi
    TextComponent text_coveredunattr_main_rep
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtülü
        +
        Kötü
    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok3_main1_rep.corr == 1:
            rep_fdb2 = 0
            trials_9.finished = True
        else:
            rep_fdb2 = 1
  Routine blok3_main1_rep_feedback
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok3_main1_rep.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine blok4_main
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    ImageComponent target_image_blok4
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok4_main
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_covered_main_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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    TextComponent text_uncovered_main_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    CodeComponent code_14
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok4_main.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok4_main_feedback
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok4_main.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine blok4_rep
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    ImageComponent target_image_blok4_rep
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok4_rep
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_covered_rep_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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    TextComponent text_uncovered_rep_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    CodeComponent code_16
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok4_rep.corr == 1:
            rep_fdb2 = 0
            trials_14.finished = True
        else:
            rep_fdb2 = 1
  Routine blok4_rep_feedback
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok4_rep.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine blok_5_inst
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    TextComponent text_blok5_ins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ekrana çıkana uyaran,

        Örtülü  yada  İyi ise -  E

        Örtüsüz yada Kötü ise - I

        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_blok5_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok5_main
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    ImageComponent target_image_blok5
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok5_main
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_coveredattr_main_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtülü
        +
        İyi
    TextComponent text_uncoveredunattr_main_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtüsüz
        +
        Kötü
    CodeComponent code_18
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok5_main.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok5_main_feedback
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok5_main.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine blok5_rep
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    ImageComponent target_image_blok5_rep
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok5_rep
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_coveredattr_rep
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtülü
        +
        İyi
    TextComponent text_uncoveredunattr_rep
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtüsüz
        +
        Kötü
    CodeComponent code_20
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok5_rep.corr == 1:
            rep_fdb2 = 0
            trials_12.finished = True
        else:
            rep_fdb2 = 1
  Routine blok5_rep_feedback
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok5_rep.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine thanks_1
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    TextComponent text_thanks1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = thanks for participants
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    KeyboardComponent key_resp_thanks1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok_4_inst
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    TextComponent text_blok4_ins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dikkat !

        Eğer ekrana çıkan yüzlerin,

        Başı örtülüyse -  E

        Başı örtüsüzse  - I


        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_blok4_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok4_2ins
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    TextComponent text_blok4_ins_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Eğer ekrana çıkan yüzlerin,

        Başı örtülüyse -  E

        Başı örtüsüzse  - I

        Eğer cevabınız yanlış ise siyah "X" işaretiyle karşılacaksınız. Doğru yaptığınız zaman bir sonraki denemeye geçeceksiniz !

        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_blok4_inst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok4_main_2
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    ImageComponent target_image_blok4_2
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok4_main_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_covered_main_4_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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    TextComponent text_uncovered_main_4_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    CodeComponent code_22
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok4_main_2.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok4_main_2_feedback
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok4_main_2.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine blok4_2_rep
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    ImageComponent target_image_blok4_rep_2
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok4_rep_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_covered_rep_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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    TextComponent text_uncovered_rep_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    CodeComponent code_24
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok4_rep_2.corr == 1:
            rep_fdb2 = 0
            trials_18.finished = True
        else:
            rep_fdb2 = 1
  Routine blok4_2_rep_feedback
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok4_rep_2.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_4_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine blok2_2intr
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    TextComponent text_blok2_inst_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Eğer ekranda beliren sıfat

        İyi kategorisindeyse  - E

        kötü kategorisindeyse - I

        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_blok2_inst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok2_2_main
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    ImageComponent image_block2_main_2
      image [set every repeat] = $wordpic
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok2_main_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_attractive_main_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = İyi
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    TextComponent text_unattractive_main_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Kötü
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    CodeComponent code_26
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok2_main_2.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok2_2_main_feedback
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok2_main_2.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine blok2_2_rep
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    ImageComponent image_block2_rep_2
      image [set every repeat] = $wordpic
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok2_rep_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_attractive_rep_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = İyi
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    TextComponent text_unattractive_rep_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Kötü
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    CodeComponent code_28
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok2_rep_2.corr == 1:
            rep_fdb2 = 0
            trials_21.finished = True
        else:
            rep_fdb2 = 1
  Routine blok2_2_rep_feedback
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    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok2_rep_2.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine blok5_2_inst
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    TextComponent text_blok5_ins_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ekrana çıkana uyaran,

        Örtülü  yada  İyi ise -  E

        Örtüsüz yada Kötü ise - I

        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_blok5_inst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok5_2_main
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    ImageComponent target_image_blok5_3
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok5_main_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_coveredattr_main5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtülü
        +
        İyi
    TextComponent text_uncoveredunattr_main5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtüsüz
        +
        Kötü
    CodeComponent code_30
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok5_main_2.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok5_2_main_feedback
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    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok5_main_2.corr == 1:
            fdb = "correct"

        else:
            fdb = "X"
            mynreps = 1000
    TextComponent text_fdb_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb
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  Routine blok5_2_rep
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    ImageComponent target_image_blok5_rep_2
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok5_rep_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_coveredattr_rep_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtülü
        +
        İyi
    TextComponent text_uncoveredunattr_rep_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtüsüz
        +
        Kötü
    CodeComponent code_32
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok5_rep_2.corr == 1:
            rep_fdb2 = 0
            trials_24.finished = True
        else:
            rep_fdb2 = 1
  Routine blok_5_2_rep_feedback
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    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok5_rep_2.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine blok1_2_main
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    ImageComponent target_image_blok1_2
      image [set every repeat] = $ImageFile
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok1_main_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_uncovered_main_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    TextComponent text_covered_main_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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    CodeComponent code_34
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok1_main_2.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok1_2_inst
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    TextComponent text_blok1_instruction1_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dikkat !

        Başı örtüsüz yüzler için E kullanılacak.

        Başı örütülü yüzler için I kullanılacak.


        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_intr1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok1_2_main_feedback
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  Routine blok1_2_rep
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    ImageComponent image_blok1_rep_2
      image [set every repeat] = $ImageFile
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok1_rep_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_rep_uncovered_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtüsüz
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    TextComponent text_rep_covered_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
      text = Örtülü
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    CodeComponent code_36
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok1_rep_2.corr == 1:
            rep_fdb2 = 0
            trials_27.finished = True
        else:
            rep_fdb2 = 1
  Routine blok1_2_rep_feedback
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    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok1_rep_2.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine blok3_2_inst
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    TextComponent text_blok3_ins_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ekranda beliren uyaran,

        Örtüsüz yada İyi ise - E

        Örtülü yada Kötü - I

        Başlamak için boşluk tuşuna basın
    KeyboardComponent key_resp_blok3_inst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blok3_2_main
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    ImageComponent target_image_blok3_2
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok3_main_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_uncoveredattr_main_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtüsüz
        +
        İyi
    TextComponent text_coveredunattr_main_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtülü
        +
        Kötü
    CodeComponent code_38
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok3_main_2.corr == 1:
            rep_fdb1 = 0
            mynreps = 0
        else:
            rep_fdb1 = 1
  Routine blok3_2_main_feedback
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  Routine blok3_2_rep
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    ImageComponent image_blok3_main1_rep_2
      image [set every repeat] = $ImageFiles
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blok3_main1_rep_2
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_uncoveredattr_main_rep_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [-0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtüsüz
        +
        İyi
    TextComponent text_coveredunattr_main_rep_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0.7, 0.4]
      startVal [time (s)] = 0.0
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      text:
        Örtülü
        +
        Kötü
    CodeComponent code_40
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blok3_main1_rep_2.corr == 1:
            rep_fdb2 = 0
            trials_30.finished = True
        else:
            rep_fdb2 = 1
  Routine blok3_2_rep_feedback
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    CodeComponent code_41
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_blok3_main1_rep_2.corr == 1:
            fdb2 = "correct"
        else:
            fdb2 = "X"
    TextComponent text_rep_feed_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fdb2
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  Routine thanks2
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    TextComponent text__thanks2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Katılımınız için Teşekkürler
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    KeyboardComponent key_resp_thanks2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine countb
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    CodeComponent counterbalance
      Code Type = Auto->JS
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      Before Experiment:
        import math as Math
        import random
      Begin Experiment:
        randNum = random.randint(0,1)

        if randNum == 0 :
            nRepsA=1
            nRepsB=0

        else:
            nRepsA=0
            nRepsB=1
  Routine exit_code1
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  Routine exitcode2
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    CodeComponent exitcode_2
      Code Type = Auto->JS
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      Each Frame:
        print("Experiment has ended")
        core.quit()
  Routine exitcode1
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    CodeComponent exitcode
      Code Type = Auto->JS
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      Each Frame:
        print("Experiment has ended")
        core.quit()
Flow
  Routine countb
  Routine general_instruction
  LoopInitiator condition1 loopType="TrialHandler"
    loopType = random
    nReps = nRepsA
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    conditions:
      [{'condsFile': 'Conditions1.xlsx'},
      {'condsFile': 'Block2Condition1.xlsx'},
      {'condsFile': 'Block3Condition1.xlsx'},
      {'condsFile': 'Block4Condition1.xlsx'},
      {'condsFile': 'Block5Condition1.xlsx'}]
    Routine blok1_instruction1
    LoopInitiator loop_block1 loopType="TrialHandler"
      conditionsFile = Conditions1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ImageFile': 'UNC_F/1.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/3.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/4.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/5.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/6.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/7.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/8.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/10.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'C_F/1.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/3.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/4.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/5.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/6.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/7.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/8.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/10.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]}]
      Routine Blok_1_Main
      LoopInitiator trials loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok_1_feedback
      LoopTerminator trials
      LoopInitiator trials_3 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine rep_blok1
        LoopInitiator trials_2 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok_1_1_feedback
        LoopTerminator trials_2
      LoopTerminator trials_3
    LoopTerminator loop_block1
    Routine blok2_instruction
    LoopInitiator loop_block2 loopType="TrialHandler"
      conditionsFile = Block2Condition1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'wordpic': 'wordpic/1.png', 'words': 'Şahane', 'corrAns': 'e'},
        {'wordpic': 'wordpic/2.png', 'words': 'Güzel', 'corrAns': 'e'},
        {'wordpic': 'wordpic/3.png', 'words': 'Sevimli', 'corrAns': 'e'},
        {'wordpic': 'wordpic/4.png', 'words': 'Mutlu', 'corrAns': 'e'},
        {'wordpic': 'wordpic/5.png', 'words': 'Hoş', 'corrAns': 'e'},
        {'wordpic': 'wordpic/6.png', 'words': 'Sevgi', 'corrAns': 'e'},
        {'wordpic': 'wordpic/7.png', 'words': 'Zafer', 'corrAns': 'e'},
        {'wordpic': 'wordpic/8.png', 'words': 'Memnun', 'corrAns': 'e'},
        {'wordpic': 'wordpic/9.png', 'words': 'Hata', 'corrAns': 'i'},
        {'wordpic': 'wordpic/10.png', 'words': 'Felaket', 'corrAns': 'i'},
        {'wordpic': 'wordpic/11.png', 'words': 'Izdırap', 'corrAns': 'i'},
        {'wordpic': 'wordpic/12.png', 'words': 'Yaramaz', 'corrAns': 'i'},
        {'wordpic': 'wordpic/13.png', 'words': 'Korkunç', 'corrAns': 'i'},
        {'wordpic': 'wordpic/14.png', 'words': 'İğrenç', 'corrAns': 'i'},
        {'wordpic': 'wordpic/15.png', 'words': 'Şeytani', 'corrAns': 'i'},
        {'wordpic': 'wordpic/16.png', 'words': 'Çirkin', 'corrAns': 'i'}]
      Routine Blok_2_Main
      LoopInitiator trials_4 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok_2_feedback
      LoopTerminator trials_4
      LoopInitiator trials_6 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine rep_blok2
        LoopInitiator trials_5 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok_2_1_feedback
        LoopTerminator trials_5
      LoopTerminator trials_6
    LoopTerminator loop_block2
    Routine blok_3_instruction
    LoopInitiator loop_block3 loopType="TrialHandler"
      conditionsFile = Block3Condition1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ImageFiles': 'UNC_F/1.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/3.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/4.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/5.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/6.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/7.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/8.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/10.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/1.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/3.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/4.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/5.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/6.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/7.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/8.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/10.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/1.png', 'wordss': 'Şahane', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/2.png', 'wordss': 'Güzel', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/3.png', 'wordss': 'Sevimli', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/4.png', 'wordss': 'Mutlu', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/5.png', 'wordss': 'Hoş', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/6.png', 'wordss': 'Sevgi', 'corrAns': 'e'}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
      Routine blok_3_main1
      LoopInitiator trials_7 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok3_main1_feedback
      LoopTerminator trials_7
      LoopInitiator trials_9 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine blok3_main1_rep
        LoopInitiator trials_8 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok3_main1_rep_feedback
        LoopTerminator trials_8
      LoopTerminator trials_9
    LoopTerminator loop_block3
    Routine blok_4_inst
    LoopInitiator loop_block4 loopType="TrialHandler"
      conditionsFile = Block4Condition1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ImageFiles': 'C_F/1.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/3.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/4.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/5.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/6.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/7.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/8.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/10.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/1.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/3.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/4.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/5.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/6.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/7.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/8.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/10.jpg', 'corrAns': 'i'}]
      Routine blok4_main
      LoopInitiator trials_11 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok4_main_feedback
      LoopTerminator trials_11
      LoopInitiator trials_14 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine blok4_rep
        LoopInitiator trials_13 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok4_rep_feedback
        LoopTerminator trials_13
      LoopTerminator trials_14
    LoopTerminator loop_block4
    Routine blok_5_inst
    LoopInitiator loop_blok5 loopType="TrialHandler"
      conditionsFile = Block5Condition1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ImageFiles': 'C_F/1.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/3.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/4.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/5.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/6.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/7.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/8.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/10.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/1.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/3.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/4.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/5.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/6.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/7.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/8.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/10.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/1.png', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/2.png', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/3.png', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/4.png', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/5.png', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/6.png', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/7.png', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/8.png', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/9.png', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/10.png', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/11.png', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/12.png', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/13.png', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/14.png', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/15.png', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/16.png', 'corrAns': 'i'}]
      Routine blok5_main
      LoopInitiator trials_10 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok5_main_feedback
      LoopTerminator trials_10
      LoopInitiator trials_12 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine blok5_rep
        LoopInitiator trials_15 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok5_rep_feedback
        LoopTerminator trials_15
      LoopTerminator trials_12
    LoopTerminator loop_blok5
    Routine thanks_1
    Routine exitcode1
  LoopTerminator condition1
  LoopInitiator condition2 loopType="TrialHandler"
    loopType = random
    nReps = nRepsB
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    conditions:
      [{'condsFile': 'Block4Condition1.xlsx'},
      {'condsFile': 'Block2Condition1.xlsx'},
      {'condsFile': 'Block5Condition1.xlsx'},
      {'condsFile': 'Conditions1.xlsx'},
      {'condsFile': 'Block3Condition1.xlsx'}]
    Routine blok4_2ins
    LoopInitiator loop_blok4_2 loopType="TrialHandler"
      conditionsFile = Block4Condition1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ImageFiles': 'C_F/1.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/3.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/4.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/5.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/6.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/7.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/8.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/10.jpg', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/1.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/3.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/4.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/5.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/6.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/7.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/8.jpg', 'corrAns': 'i'},
        {'ImageFiles': 'UNC_F/10.jpg', 'corrAns': 'i'}]
      Routine blok4_main_2
      LoopInitiator trials_16 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok4_main_2_feedback
      LoopTerminator trials_16
      LoopInitiator trials_18 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine blok4_2_rep
        LoopInitiator trials_17 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok4_2_rep_feedback
        LoopTerminator trials_17
      LoopTerminator trials_18
    LoopTerminator loop_blok4_2
    Routine blok2_2intr
    LoopInitiator loop_blok2_2 loopType="TrialHandler"
      conditionsFile = Block2Condition1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'wordpic': 'wordpic/1.png', 'words': 'Şahane', 'corrAns': 'e'},
        {'wordpic': 'wordpic/2.png', 'words': 'Güzel', 'corrAns': 'e'},
        {'wordpic': 'wordpic/3.png', 'words': 'Sevimli', 'corrAns': 'e'},
        {'wordpic': 'wordpic/4.png', 'words': 'Mutlu', 'corrAns': 'e'},
        {'wordpic': 'wordpic/5.png', 'words': 'Hoş', 'corrAns': 'e'},
        {'wordpic': 'wordpic/6.png', 'words': 'Sevgi', 'corrAns': 'e'},
        {'wordpic': 'wordpic/7.png', 'words': 'Zafer', 'corrAns': 'e'},
        {'wordpic': 'wordpic/8.png', 'words': 'Memnun', 'corrAns': 'e'},
        {'wordpic': 'wordpic/9.png', 'words': 'Hata', 'corrAns': 'i'},
        {'wordpic': 'wordpic/10.png', 'words': 'Felaket', 'corrAns': 'i'},
        {'wordpic': 'wordpic/11.png', 'words': 'Izdırap', 'corrAns': 'i'},
        {'wordpic': 'wordpic/12.png', 'words': 'Yaramaz', 'corrAns': 'i'},
        {'wordpic': 'wordpic/13.png', 'words': 'Korkunç', 'corrAns': 'i'},
        {'wordpic': 'wordpic/14.png', 'words': 'İğrenç', 'corrAns': 'i'},
        {'wordpic': 'wordpic/15.png', 'words': 'Şeytani', 'corrAns': 'i'},
        {'wordpic': 'wordpic/16.png', 'words': 'Çirkin', 'corrAns': 'i'}]
      Routine blok2_2_main
      LoopInitiator trials_19 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok2_2_main_feedback
      LoopTerminator trials_19
      LoopInitiator trials_21 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine blok2_2_rep
        LoopInitiator trials_20 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok2_2_rep_feedback
        LoopTerminator trials_20
      LoopTerminator trials_21
    LoopTerminator loop_blok2_2
    Routine blok5_2_inst
    LoopInitiator loop_5_2 loopType="TrialHandler"
      conditionsFile = Block5Condition1.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blok5_2_main
      LoopInitiator trials_22 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok5_2_main_feedback
      LoopTerminator trials_22
      LoopInitiator trials_24 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine blok5_2_rep
        LoopInitiator trials_23 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok_5_2_rep_feedback
        LoopTerminator trials_23
      LoopTerminator trials_24
    LoopTerminator loop_5_2
    Routine blok1_2_inst
    LoopInitiator loop_blok1_2 loopType="TrialHandler"
      conditionsFile = Conditions1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ImageFile': 'UNC_F/1.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/3.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/4.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/5.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/6.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/7.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/8.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'UNC_F/10.jpg', 'text': 'Uncovered', 'corrAns': 'e', 'side': [-0.7, 0.4]},
        {'ImageFile': 'C_F/1.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/3.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/4.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/5.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/6.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/7.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/8.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]},
        {'ImageFile': 'C_F/10.jpg', 'text': 'Covered', 'corrAns': 'i', 'side': [0.7, 0.4]}]
      Routine blok1_2_main
      LoopInitiator trials_25 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok1_2_main_feedback
      LoopTerminator trials_25
      LoopInitiator trials_27 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine blok1_2_rep
        LoopInitiator trials_26 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok1_2_rep_feedback
        LoopTerminator trials_26
      LoopTerminator trials_27
    LoopTerminator loop_blok1_2
    Routine blok3_2_inst
    LoopInitiator loop_blok3_2 loopType="TrialHandler"
      conditionsFile = Block3Condition1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ImageFiles': 'UNC_F/1.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/3.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/4.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/5.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/6.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/7.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/8.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'UNC_F/10.jpg', 'wordss': 'uncovered', 'corrAns': 'e'},
        {'ImageFiles': 'C_F/1.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/3.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/4.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/5.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/6.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/7.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/8.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'C_F/10.jpg', 'wordss': 'covered', 'corrAns': 'i'},
        {'ImageFiles': 'wordpic/1.png', 'wordss': 'Şahane', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/2.png', 'wordss': 'Güzel', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/3.png', 'wordss': 'Sevimli', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/4.png', 'wordss': 'Mutlu', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/5.png', 'wordss': 'Hoş', 'corrAns': 'e'},
        {'ImageFiles': 'wordpic/6.png', 'wordss': 'Sevgi', 'corrAns': 'e'}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
      Routine blok3_2_main
      LoopInitiator trials_28 loopType="TrialHandler"
        loopType = random
        nReps = rep_fdb1
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        Routine blok3_2_main_feedback
      LoopTerminator trials_28
      LoopInitiator trials_30 loopType="TrialHandler"
        loopType = random
        nReps = mynreps
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        Routine blok3_2_rep
        LoopInitiator trials_29 loopType="TrialHandler"
          loopType = random
          nReps = rep_fdb2
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          Routine blok3_2_rep_feedback
        LoopTerminator trials_29
      LoopTerminator trials_30
    LoopTerminator loop_blok3_2
    Routine thanks2
    Routine exitcode2
  LoopTerminator condition2
