PsychoPy2experiment version="2022.1.2"
Settings
  Audio lib = sounddevice
  Data file delimiter = tab
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = deney-negatif
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine anxinfo
    TextComponent anxinfotext
      durationEstim = 5
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 20
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      text:
        Bir sonraki ekranda insanların kaygılı ya da endişeli oldukları zamanlarda yaşadıkları bazı belirtiler verilmiştir.

        Lütfen her maddeyi dikkatle okuyunuz. Daha sonra, her maddedeki belirtinin BUGÜN DAHİL SON BİR (1) HAFTADIR sizi ne kadar rahatsız ettiğini ilgili şıkkı işaretleyerek belirleyiniz.

        0 = "Hiç",
        1 = "Hafif Düzeyde, Beni Pek Etkilemedi",
        2 = "Orta Düzeyde, Hoş Değildi ama Katlanabildim",
        3 = "Ciddi Düzeyde, Dayanmakta Çok Zorlandım"
    MouseComponent mouse_2
      clickable = bitti_3
      durationEstim = 5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent bitti_3
      contrast = 0.5
      image [set every repeat] = bitti.png
      pos = (0, -0.42)
      saveStartStop = False
      size = 0.175, 0.1
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  Routine expinfo
    ImageComponent colorblue
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent clickend1
      clickable = tamambuton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 5
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    ImageComponent intro
      disabled = True
      image = çalısmabasl1.png
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    ImageComponent tamambuton
      contrast = 0.5
      image [set every repeat] = tamam.png
      pos = (0, -450)
      saveStartStop = False
      startVal [time (s)] = 5
      units = pix
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    TextComponent text
      color = black
      letterHeight = 1
      pos = (0, 2)
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 45
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      text:
        Sayın Katılımcı,

        Çalışmaya başlamadan önce tamamlamanız gereken bir adet form bulunmaktadır. Bu sayfanın en altında yer alan "TAMAM" butonuna tıkladığınızda önünüze Bilgilendirilmiş Onam Formu çıkacaktır. Bu formu dikkatlice okuyunuz. Bilgilendirmiş Onam Formu ile ilgili sorularınızı araştırmacıya sorabilirsiniz. Bilgilendirilmiş Onam Formunu okuduktan sonra devam etmek için ‘‘OKUDUM, ANLADIM, ONAYLIYORUM’’ butonuna tıklayınız.


        Katılımınız için teşekkür ederiz.
  Routine cattell6
    ImageComponent ornek
      image [set every repeat] = $soru
      pos [set every repeat] = pose
      saveStartStop = False
      size [set every repeat] = size
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent a
      image [set every repeat] = $cevapA
      pos = (-13.25,-6)
      size = 4,4
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent b
      image [set every repeat] = $cevapB
      pos = (-7.95,-6)
      size = 4,4
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent c
      image [set every repeat] = $cevapC
      pos = (-2.65,-6)
      size = 4,4
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent d
      image [set every repeat] = $cevapD
      pos = (2.65, -6)
      size = 4,4
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent e
      image [set every repeat] = $cevapE
      pos = (7.95, -6)
      size = 4,4
      startVal [time (s)] = 0
      units = cm
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    ImageComponent f
      image [set every repeat] = $cevapF
      pos = (13.25, -6)
      size = 4,4
      startVal [time (s)] = 0.0
      units = cm
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    MouseComponent mouse
      clickable = a, b, c, d, e, f
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructionn
      color = black
      letterHeight = 0.8
      pos [set every repeat] = poses
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction
      units = cm
      wrapWidth = 30
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    TextComponent süre
      color = black
      letterHeight = 1
      pos = (23, -14)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      text [set every frame] = $"Kalan süre: {0}".format(int(30-t))
      units = cm
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    NoiseStimComponent noise_2
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos [set every repeat] = pose2
      saveStartStop = False
      sf = None
      size = (25, 12)
      startVal [time (s)] = 30
      texture resolution = 64
      units = cm
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    TextComponent timeuptext
      color = black
      font = Impact
      letterHeight = 2
      pos [set every repeat] = pose2
      saveStartStop = False
      startVal [time (s)] = 30
      units = cm
      wrapWidth = 18
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      text:
        SÜRENİZ DOLDU.
        CEVABINIZI İŞARETLEYİN.
  Routine blank
    ImageComponent colorblue_8
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9.9
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.9
      text = Test başlıyor! Elinizin konumunu klavyede belirlenen harflere göre ayarlayın.
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.9
      text [set every frame] = $str(round((10-t),1))
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  Routine feedback
    SoundComponent soundd
      saveStartStop = False
      sound [set every repeat] = $correct
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent feedback_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $correct_text
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  Routine ruminasyon
    SliderComponent slider_2
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 1.5
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    TextComponent ruminasyonsorular
      color = $[-1.0000, -0.0588, 0.6863]
      letterHeight = 1.5
      pos = (0, 4)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = $itemText
      units = cm
      wrapWidth = 35
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    ImageComponent bitti_2
      contrast = 0.5
      image = tamam.png
      pos = (0, -0.4)
      saveStartStop = False
      startVal [condition] = markerr is not ""
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    MouseComponent trialbitiren_2
      clickable = bitti_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = markerr is not ""
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        thisPoss = 0
        markerr = ""
        slider_2 = visual.Slider(win=win, name='slider_2',
            startValue=None, size=(1.0, 0.1), pos=(0, -0.1), units=None,
            labels=("0", "10","20", "30", "40", "50", "60", "70", "80", "90", "100"), ticks=[0,10,20,30,40,50,60,70,80,90,100], granularity=5.0,
            style='rating', styleTweaks=(), opacity=1,
            color='black', fillColor='black', borderColor='black', colorSpace='rgb',
            font='Open Sans', labelHeight=0.03,
            flip=False, depth=-1, readOnly=False)
        slider_2.marker = visual.Rect(
            win=win, name='polygon',units=None,
            width=(0.01, 0.1)[0], height=(0.01, 0.1)[1],
            ori=0.0, pos=(0,-3),
            lineWidth=1.0,     colorSpace='rgb',  lineColor=[-1.0000, -0.0588, 0.6863], fillColor=[-1.0000, -0.0588, 0.6863],
            opacity=None, depth=-9.0, interpolate=True)
        slider_2.tickLines.opacities = 0
      Each Frame:
        if slider_2.getMarkerPos() is None:
            thisPoss = 0
            markerr = ""
        else:
            thisPoss = (slider_2.getMarkerPos() / 100)-0.5
            markerr = int(slider_2.getMarkerPos())
    TextComponent ratingText_2
      color = black
      letterHeight = 0.03
      pos [set every frame] = (thisPoss, -.025)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text [set every frame] = $str(markerr)
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    TextComponent ruminasyonklvz
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Aşağıdaki maddeyi, ŞU ANDA nasıl hissettiğinizi ya da düşündüğünüzü göz önünde bulundurarak çizgiyi sürükleyerek puanlayınız.
      wrapWidth = 1.5
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    PolygonComponent fakemarker_3
      fillColor = $[-1.0000, -0.0588, 0.6863]
      lineColor = $[-1.0000, -0.0588, 0.6863]
      pos = (-0.5, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.01, 0.1)
      startVal [time (s)] = 1.5
      stopVal [condition] = slider_2.getMarkerPos() is not None
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    TextComponent negatiftext_2
      color = black
      letterHeight = 0.03
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = Hiç Doğru Değil
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    TextComponent pozitiftext_2
      color = black
      letterHeight = 0.03
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = Tümüyle Doğru
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    TextComponent arrows_2
      color = $[-1.0000, -0.0588, 0.6863]
      letterHeight = 0.1
      pos = (-0.5, -0.02)
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [condition] = slider_2.getMarkerPos() is not None
      text = ← →
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  Routine duygular
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        #duygular = []
      Begin Routine:
        #yanda olması için exp değerleri: (0.55, -.095)
        thisPos = 0
        marker = slider.getMarkerPos()
        slider = visual.Slider(win=win, name='slider',
            startValue=None, size=(1.0, 0.1), pos=(0, -0.1), units=None,
            labels=("0", "10","20", "30", "40", "50", "60", "70", "80", "90", "100"), ticks=[0,10,20,30,40,50,60,70,80,90,100], granularity=5.0,
            style='rating', styleTweaks=(), opacity=1,
            color='black', fillColor='black', borderColor='black', colorSpace='rgb',
            font='Open Sans', labelHeight=0.03,
            flip=False, depth=-1, readOnly=False)
        slider.marker = visual.Rect(
            win=win, name='polygon',units=None,
            width=(0.01, 0.1)[0], height=(0.01, 0.1)[1],
            ori=0.0, pos=(0,-3),
            lineWidth=1.0,     colorSpace='rgb',  lineColor=[-1.0000, -0.0588, 0.6863], fillColor=[-1.0000, -0.0588, 0.6863],
            opacity=None, depth=-9.0, interpolate=True)
        slider.tickLines.opacities = 0
      Each Frame:
        if slider.getMarkerPos() != None:
            thisPos = (slider.getMarkerPos() / 100)-0.5
            marker = int(slider.getMarkerPos())
        else:
            marker = ""
      End Routine:
        #duygular.extend(int(thisTrials.data["slider.response"]))
    SliderComponent slider
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 1.5
      styles = rating
      ticks = 0,10,20,30,40,50,60,70,80,90,100
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    TextComponent ratingText
      color = black
      letterHeight = 0.03
      pos [set every frame] = (thisPos, -0.035)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text [set every frame] = $str(marker)
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    TextComponent slidersoru
      color = black
      letterHeight = 0.04
      pos [set every frame] = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Aşağıdaki duyguyu ŞU ANDA ne düzeyde hissettiğinizi çizgiyi sürükleyerek puanlayınız.
      wrapWidth = 50
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    MouseComponent trialbitiren
      clickable = bitti
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = marker is not ""
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    ImageComponent bitti
      contrast = 0.5
      image [set every repeat] = tamam.png
      pos = (0, -0.4)
      saveStartStop = False
      startVal [condition] = marker is not ""
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    TextComponent negatiftext
      color = black
      letterHeight = 0.03
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text [set every repeat] = $negatif
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    TextComponent pozitiftext
      color = black
      letterHeight = 0.03
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text [set every repeat] = $pozitif
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    TextComponent notrtext
      color = $[-1.0000, -0.0588, 0.6863]
      letterHeight = 3
      pos = (0, 2.4)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = $notr
      units = cm
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    PolygonComponent fakemarker_2
      fillColor = $[-1.0000, -0.0588, 0.6863]
      lineColor = $[-1.0000, -0.0588, 0.6863]
      pos = (-0.5, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.01, 0.1)
      startVal [time (s)] = 1.5
      stopVal [condition] = slider.getMarkerPos() is not None
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    TextComponent arrows
      color = $[-1.0000, -0.0588, 0.6863]
      letterHeight = 0.1
      pos = (-0.5, -0.02)
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [condition] = slider.getMarkerPos() is not None
      text = ← →
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  Routine expfin
    ImageComponent colorblue_11
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = tamamm
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 5
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    ImageComponent fin
      disabled = True
      image = sonlandırmasayfabilgisayfa.png
      saveStartStop = False
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    ImageComponent tamamm
      image = tamam.png
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 5
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    TextComponent finishingtxt
      color = black
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 45
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      text:
        Çalışmanın tüm aşamalarını tamamladınız. Çalışmaya katılımınız için teşekkür ederiz.

        Araştırmacı çalışma hakkında bilgilendirme yapmak için kısa bir görüşme gerçekleştirecektir. Lütfen şimdi "TAMAM" butonuna basarak deneyi sonlandırınız.
    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        from numpy import subtract
      End Routine:
        navonblok1correct = navonblok1.data["correct"]
        navonblok2correct = navonblok2.data["correct"]
        navonblok3correct = navonblok3.data["correct"]
        navonblok4correct = navonblok4.data["correct"]

        duygufark = subtract(duygu1.data["slider.response"], duygu2.data["slider.response"]).tolist()
        toplamlar.addData("duygu fark", duygufark)
        rumifark = subtract(brsi1.data["slider_2.response"], brsi2.data["slider_2.response"]).tolist()
        toplamlar.addData("ruminasyon fark", rumifark)

        toplamlar.addData("Navon Doğru Yüzdesi Ön Test", navonblok1correct.sum()+navonblok2correct.sum()/160)
        toplamlar.addData("Navon Doğru Yüzdesi Son Test", navonblok3correct.sum()+navonblok4correct.sum()/160)
  Routine session_end
    CodeComponent mailsent
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        import smtplib
        from email.mime.multipart import MIMEMultipart
        from email.mime.text import MIMEText
        mail_content = """Haydi odaya."""
        #The mail addresses and password
        sender_address = 'calismafeedback@gmail.com'
        sender_pass = 'calismafeedback123.'
        receiver_address = 'calismafeedback@gmail.com'
        #Setup the MIME
        message = MIMEMultipart()
        message['From'] = sender_address
        message['To'] = receiver_address
        message['Subject'] = 'Test bitti!'   #The subject line
        #Create SMTP session for sending the mail
        session = smtplib.SMTP('smtp.gmail.com', 587) #use gmail with port
        session.starttls() #enable security
        session.login(sender_address, sender_pass) #login with mail_id and password
      Begin Routine:
        text = message.as_string()
        session.sendmail(sender_address, receiver_address, text)
    CodeComponent telegram
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        import telegram_send
      Begin Routine:
        telegram_send.send(messages=["Aşama sona erdi."])
  Routine onam
    ImageComponent colorblue_2
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent onaybuton
      image = onay.png
      pos = (0, -0.42)
      startVal [time (s)] = 5
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    MouseComponent clickend2
      clickable = onaybuton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 5
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    TextboxComponent textbox
      anchor = top-center
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      lineSpacing = 1.00
      pos = (0, -0.25)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent adısoyadı
      color = black
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Ad-Soyad
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    TextComponent onamtext
      color = black
      letterHeight = 0.7
      pos = (0, 3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 50
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      text:
        Sayın Katılımcı,

        Bu çalışma İstanbul Sabahattin Zaim Üniversitesi İnsan ve Toplum Bilimleri Fakültesi Psikoloji Bölümü Dr. Öğr. Üyesi Yusuf BİLGE danışmanlığında, İstanbul Sabahattin Zaim Üniversitesi Lisansüstü Eğitim Enstitüsü Klinik Psikoloji yüksek lisans öğrencisi Kübra MAHMUT ÖNALAN tarafından yüksek lisans tezi ve Bilimsel Araştırma Projesi (BAP) kapsamında yürütülmektedir.

        Katılacağınız çalışma beş aşamadan oluşan bir psikoloji çalışmasıdır. Her aşama ayrı ayrı bölümlendirilmiş olup, her aşamanın başında geçtiğiniz aşamaya göre bir bilgilendirme ekranı ile karşılaşacaksınız. Geçtiğiniz aşama ile ilgili yönergeler araştırmacının kendisi tarafından verilecektir. Tüm aşamalar yaklaşık 30 dakika sürecektir.

        Bu çalışmaya katılmak tamamen gönüllülük esasına dayanmaktadır. Bu formu okuyup onaylamanız, araştırmaya katılmayı kabul ettiğiniz anlamına gelecektir. Ancak, çalışmaya katılmama veya katıldıktan sonra herhangi bir anda çalışmayı bırakma hakkına da sahipsiniz. Bu çalışmadan elde edilecek bilgiler tamamen araştırma amacı ile kullanılacak olup kişisel bilgileriniz gizli tutulacaktır. Araştırmada kişisel veri toplanacağından 6698 sayılı kişisel verilerin korunması kanunu ve ilgili mevzuat uyarınca kişisel verileri korumak amacıyla gerekli tüm tedbirler alınacaktır.

        Çalışmanın sonunda araştırmacı çalışmanın içeriğiyle ilgili kısa bir görüşme gerçekleştirecektir. Görüşmeden sonra araştırmacı çalışma ile ilgili sorularınız için iletişim bilgilerini paylaşarak çalışmayı sonlandıracaktır.
  Routine hataruminasyon
    SliderComponent hataslider
      borderColor = black
      color = black
      fillColor = $[-1.0000, -0.0588, 0.6863]
      forceEndRoutine = False
      granularity = 1
      labels = ("Hiçbir Zaman", "Biraz", "Orta Düzeyde", "Çok Fazla")
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 1.5
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextComponent sorular_2
      color = $[-1.0000, -0.0588, 0.6863]
      durationEstim = 10
      letterHeight = 1.5
      pos = (0, 4)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = $itemText
      units = cm
      wrapWidth = 40
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    ImageComponent tamam8
      image = tamam.png
      pos = (0, -0.42)
      saveStartStop = False
      startVal [condition] = hataslider.getMarkerPos() is not None
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    MouseComponent mouse_10
      clickable = tamam8
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = hataslider.getMarkerPos() is not None
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    CodeComponent code_6
      Code Type = Py
      disabled = True
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      Begin Routine:
        hataslider = visual.Slider(win=win, name='hataslider',
            startValue=None, size=(1.0, 0.1), pos=(0, -0.1), units=None,
            labels=("Hiçbir Zaman", "Biraz", "Orta Düzeyde", "Çok Fazla"), ticks=(1, 2, 3, 4), granularity=1.0,
            style='rating', styleTweaks=(), opacity=1,
            color='black', fillColor='black', borderColor='black', colorSpace='rgb',
            font='Open Sans', labelHeight=0.03,
            flip=False, depth=0, readOnly=False)
        hataslider.marker = visual.Rect(
            win=win, name='polygon',units=None,
            width=(0.01, 0.1)[0], height=(0.01, 0.1)[1],
            ori=0.0, pos=(0,-3),
            lineWidth=1.0,     colorSpace='rgb',  lineColor=[-1.0000, -0.0588, 0.6863], fillColor=[-1.0000, -0.0588, 0.6863],
            opacity=None, depth=-9.0, interpolate=True)
        hataslider.tickLines.opacities = 0
    PolygonComponent polygon
      disabled = True
      fillColor = $[-1.0000, -0.0588, 0.6863]
      lineColor = $[-1.0000, -0.0588, 0.6863]
      pos = (0, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.01, 0.1)
      startVal [time (s)] = 1.5
      stopVal [condition] = hataslider.getMarkerPos() is not None
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    TextComponent arrows_4
      color = $[-1.0000, -0.0588, 0.6863]
      disabled = True
      letterHeight = 0.1
      pos = (0, -0.02)
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [condition] = hataslider.getMarkerPos() is not None
      text = ← →
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    TextComponent hatarumklvztxt
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      text = Aşağıdaki verilen ifadeyi katıldığınız BU ÇALIŞMA İLE İLGİLİ deneyiminizi göz önünde bulundurarak puanlayınız.
      wrapWidth = 1.5
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  Routine interval
    TextComponent countdown
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 59.9
      text [set every frame] = $round(60-t, ndigits=1)
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        line_lenght = 30
      Each Frame:
        line_lenght = (30-(t/2))
    PolygonComponent timer_line
      fillColor = $[-1.0000, -0.0588, 0.6863]
      lineColor = $[-1.0000, -0.0588, 0.6863]
      pos = (0, -5)
      saveStartStop = False
      shape = rectangle
      size [set every frame] = (line_lenght, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 59.9
      units = cm
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    TextComponent mola
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 59.9
      text = -Mola-
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  Routine navonbilgi
    ImageComponent colorblue_4
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_6
      clickable = tamam4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 5
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    ImageComponent tamam4
      image = tamam.png
      pos = (0, -0.42)
      startVal [time (s)] = 5
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    ImageComponent orneknavonimg
      image = orneknavon.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent text_3
      color = black
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 45
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      text:
        Ölçek aşamasını tamamladınız. Çalışmanın ikinci aşaması olan "Dikkat Testi Aşaması"na geçtiniz. Lütfen araştırmacıyı bekleyiniz. Araştırmacı size bu aşama ile ilgili gerekli açıklamaları yapacaktır.














        Araştırmacı size gerekli açıklamaları sunduktan sonra "TAMAM" butonuna tıklayabilirsiniz. Açıklama yapılmadan önce "TAMAM" butonuna basmayınız.
  Routine cattellbilgi
    ImageComponent colorblue_5
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      clickable = tamam5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 5
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    ImageComponent tamam5
      image = tamam.png
      pos = (0, -0.42)
      startVal [time (s)] = 5
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    TextComponent cattelllbilgitxt1
      color = black
      letterHeight = 0.9
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 45
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      text:
        Dikkat Testi Aşamasını tamamladınız. Çalışmanın üçüncü aşaması olan "Zeka Testi Aşaması"na geçtiniz. Lütfen araştırmacıyı bekleyiniz. Araştırmacı size bu aşama ile ilgili gerekli açıklamaları yapacaktır.

        Araştırmacı size gerekli açıklamaları sunduktan sonra "TAMAM" butonuna tıklayabilirsiniz. Açıklama yapılmadan önce "TAMAM" butonuna basmayınız.
  Routine navonbilgi2
    ImageComponent colorblue_10
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_8
      clickable = tamam6
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 5
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    ImageComponent navonbilgiimage2
      disabled = True
      image = 4aşamabilgisayfası.png
      saveStartStop = False
      startVal [time (s)] = 0
      units = cm
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    ImageComponent tamam6
      image = tamam.png
      pos = (0, -0.42)
      startVal [time (s)] = 5
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    TextComponent text_4
      color = black
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 45
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      text:
        Ölçek Aşamasını tamamladınız. Çalışmanın son aşaması olan "Dikkat Testi Aşaması"na geçtiniz. Lütfen araştırmacıyı bekleyiniz. Araştırmacı size bu aşama ile ilgili gerekli açıklamaları yapacaktır.














        Araştırmacı size gerekli açıklamaları sunduktan sonra "TAMAM" butonuna tıklayabilirsiniz. Açıklama yapılmadan önce "TAMAM" butonuna basmayınız.
    ImageComponent orneknavonimg_2
      image = orneknavon.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
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  Routine testbilgi
    ImageComponent colorblue_9
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent testbilgiimage
      disabled = True
      image = besincisayfabilgisayfa.png
      saveStartStop = False
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    MouseComponent mouse_9
      clickable = tamam7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 5
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    ImageComponent tamam7
      image = tamam.png
      pos = (0, -0.42)
      startVal [time (s)] = 5
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    TextComponent sonasamabilgitxt
      color = black
      letterHeight = 0.9
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 45
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      text:
        Zeka Testi Aşamasını tamamladınız. Çalışmanın dördüncü aşaması olan "Ölçek Aşaması"na geçtiniz. Lütfen araştırmacıyı bekleyiniz. Araştırmacı size bu aşama ile ilgili gerekli açıklamaları yapacaktır.

        Araştırmacı size gerekli açıklamaları sunduktan sonra "TAMAM" butonuna tıklayabilirsiniz. Açıklama yapılmadan önce "TAMAM" butonuna basmayınız.
  Routine birinciasamainfo
    ImageComponent colorblue_3
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = tamambuton_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
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    ImageComponent birincisayfa
      disabled = True
      image = birincisayfabilgisayfa.png
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    ImageComponent tamambuton_2
      contrast = 0.5
      image [set every repeat] = tamam.png
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 5
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    TextComponent olcekasaması1
      color = black
      letterHeight = 0.9
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 35
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      text:
        Bilgilendirilmiş Onam Formunu onayladınız. Çalışmanın ilk aşaması olan "Ölçek Aşaması"na geçtiniz. Araştırmacı size bu aşama ile ilgili gerekli açıklamaları yapacaktır.

        Gerekli açıklamalar yapıldıktan sonra "TAMAM" butonuna basarak ölçek aşamasına geçebilirsiniz. Açıklama yapılmadan önce "TAMAM" butonuna basmayınız.
  Routine ruminasyon_2
    SliderComponent slider_3
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 5
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    TextComponent sorular_3
      color = $[-1.0000, -0.0588, 0.6863]
      letterHeight = 1.5
      pos = (0, 4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemText
      units = cm
      wrapWidth = 25
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    ImageComponent bitti_4
      contrast = 0.5
      image = tamam.png
      pos = (0, -0.4)
      saveStartStop = False
      startVal [condition] = markerrr is not ""
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    MouseComponent trialbitiren_3
      clickable = bitti_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = markerrr is not ""
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        thisPosss = 0
        markerrr = ""
        slider_3 = visual.Slider(win=win, name='slider_3',
            startValue=None, size=(1.0, 0.1), pos=(0, -0.1), units=None,
            labels=("0", "10","20", "30", "40", "50", "60", "70", "80", "90", "100"),
            ticks=[0,10,20,30,40,50,60,70,80,90,100], granularity=5.0,
            style='rating', styleTweaks=(), opacity=1,
            color='black', fillColor='black', borderColor='black', colorSpace='rgb',
            font='Open Sans', labelHeight=0.03,
            flip=False, depth=-1, readOnly=False)
        slider_3.marker = visual.Rect(
            win=win, name='polygon',units=None,
            width=(0.01, 0.1)[0], height=(0.01, 0.1)[1],
            ori=0.0, pos=(0,-3),lineWidth=1.0,colorSpace='rgb',
            lineColor=[-1.0000, -0.0588, 0.6863], fillColor=[-1.0000, -0.0588, 0.6863],
            opacity=None, depth=-9.0, interpolate=True)
        slider_3.tickLines.opacities = 0
      Each Frame:
        if slider_3.getMarkerPos() is None:
            thisPoss = 0
        else:
            thisPosss = (slider_3.getMarkerPos() / 100)-0.5
            markerrr = int(slider_3.getMarkerPos())
    TextComponent ratingText_3
      color = black
      letterHeight = 0.03
      pos [set every frame] = (thisPosss, -.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $str(markerrr)
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    TextComponent soru_2
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Aşağıdaki maddeyi, şu anda nasıl hissettiğinizi ya da düşündüğünüzü göz önünde bulundurarak çizgiyi sürükleyerek puanlayınız.
      wrapWidth = 1.5
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    PolygonComponent fakemarker
      fillColor = $[-1.0000, -0.0588, 0.6863]
      lineColor = $[-1.0000, -0.0588, 0.6863]
      pos = (0, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.01, 0.1)
      startVal [time (s)] = 0
      stopVal [condition] = slider_3.getMarkerPos() is not None
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    TextComponent arrows_3
      color = $[-1.0000, -0.0588, 0.6863]
      letterHeight = 0.1
      pos = (0, -0.02)
      startVal [time (s)] = 0.0
      stopVal [condition] = slider_3.getMarkerPos() is not None
      text = ← →
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    TextComponent negatiftext_3
      color = black
      letterHeight = 0.03
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hiç Doğru Değil
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    TextComponent pozitiftext_3
      color = black
      letterHeight = 0.03
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tümüyle Doğru
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  Routine toplampuan
    TextComponent toplam
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ZEKA TESTİ SONUCU:

        2/14
    ImageComponent tamam7_2
      image = tamam.png
      pos = (0, -0.42)
      startVal [time (s)] = 5
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    MouseComponent mouse_4
      clickable = tamam7_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine dogru_2
    TextComponent dogrusu
      color = $[-1.0000, -0.0588, 0.6863]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $dogru
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    TextComponent texttt
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Doğru Cevap:
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'right', 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pilot_navon
    ImageComponent colorblue_7
      image = mavi.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent pilotnavontxt
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Deneme aşaması sona ermiştir.

        Bu aşamadan sonraki performansınız değerlendirilecektir.

        Deneme aşamasını tekrar etmek için "Tekrar" butonuna, test aşamasına geçmek için hazır olduğunuzda "Tamam" butonuna basın.
    ImageComponent tamam4_2
      image = tamam.png
      pos = (6,-6)
      saveStartStop = False
      startVal [time (s)] = 0
      units = cm
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    ImageComponent tekrarbuttonimg
      image = bos.png
      pos = (-6, -6)
      startVal [time (s)] = 0.0
      units = cm
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    ButtonComponent tekrarbutton
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 1
      pos = (-6, -6)
      size = (6, 1.5)
      startVal [time (s)] = 0
      text = Tekrar?
      units = cm
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    ButtonComponent tamambutton
      bold = True
      callback = denemeloop.finished = True
      color = black
      forceEndRoutine = True
      letterHeight = 1
      pos = (6,-6)
      size = (6, 1.5)
      startVal [time (s)] = 0
      units = cm
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    TextComponent tekrartexttt
      color = $[-1.0000, -0.4431, 0.0275]
      letterHeight = 1
      pos = (-6,-6)
      startVal [time (s)] = 0.0
      text = TEKRAR
      units = cm
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  Routine finnishhhhhh
    KeyboardComponent key_resp_4
      allowedKeys = 'h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = ...
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  Routine cattell2_2
    TextComponent harfsoru
      color = $[-1.0000, -0.0588, 0.6863]
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $soru_catell
      wrapWidth = 40
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    TextComponent kılavuz
      color = black
      letterHeight = 1
      pos = (0, 5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Aşağıdaki harflerin oluşturduğu örüntüde "?" yerine aşağıdakilerden hangisi gelmelidir?
      units = cm
      wrapWidth = 40
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    ButtonComponent butoncvp_1
      bold = True
      fillColor = $[-1.0000, -0.0588, 0.6863]
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 1
      pos = (-10, -8)
      size = (3,2)
      startVal [time (s)] = 0
      text [set every repeat] = $cvp1
      units = cm
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    ButtonComponent butoncvp_2
      bold = True
      fillColor = $[-1.0000, -0.0588, 0.6863]
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 1
      pos = (-5, -8)
      size = (3,2)
      startVal [time (s)] = 0
      text [set every repeat] = $cvp2
      units = cm
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    ButtonComponent butoncvp_3
      bold = True
      fillColor = $[-1.0000, -0.0588, 0.6863]
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -8)
      size = (3,2)
      startVal [time (s)] = 0
      text [set every repeat] = $cvp3
      units = cm
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    ButtonComponent butoncvp_4
      bold = True
      fillColor = $[-1.0000, -0.0588, 0.6863]
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 1
      pos = (5, -8)
      size = (3,2)
      startVal [time (s)] = 0
      text [set every repeat] = $cvp4
      units = cm
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    ButtonComponent butoncvp_5
      bold = True
      fillColor = $[-1.0000, -0.0588, 0.6863]
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 1
      pos = (10, -8)
      size = (3,2)
      startVal [time (s)] = 0
      text [set every repeat] = $cvp5
      units = cm
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    NoiseStimComponent noise_3
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos = (0, -1)
      saveStartStop = False
      sf = None
      size = (40, 8)
      startVal [time (s)] = 25
      texture resolution = 64
      units = cm
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    TextComponent süre_2
      color = black
      letterHeight = 1
      pos = (23, -14)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [time (s)] = 25
      text [set every frame] = $"Kalan süre: {0}".format(int(25-t))
      units = cm
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    TextComponent timeuptext_2
      color = black
      font = Impact
      letterHeight = 2
      pos [set every repeat] = (0, -1)
      saveStartStop = False
      startVal [time (s)] = 25
      units = cm
      wrapWidth = 18
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      text:
        SÜRENİZ DOLDU.
        CEVABINIZI İŞARETLEYİN.
  Routine navon_pilot
    CodeComponent randompose_2
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        poseee=[-5,5]
        random_posee = random.choice(poseee)
    ImageComponent letter_2
      image [set every repeat] = $soru
      pos [set every repeat] = (random_posee, 0)
      saveStartStop = False
      size = (8,8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.15
      units = cm
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    TextComponent fix_2
      color = $[-1.0, -1.0, -1.0]
      letterHeight = 1.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = cm
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $dogru
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      storeCorrect = True
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    ImageComponent letter2_2
      disabled = True
      image [set every repeat] = $soru
      pos [set every repeat] = ((random_pose*-1), 0)
      saveStartStop = False
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      units = cm
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    NoiseStimComponent noise_4
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos [set every repeat] = (random_posee, 0)
      saveStartStop = False
      sf = None
      size = (8, 8)
      startVal [time (s)] = 0.65
      stopVal [duration (s)] = 2.85
      units = cm
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  Routine navon_1
    ImageComponent letter
      image [set every repeat] = $soru
      pos [set every repeat] = (navonpose, 0)
      saveStartStop = False
      size = (8,8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.15
      units = cm
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    TextComponent fix
      color = $[-1.0, -1.0, -1.0]
      letterHeight = 1.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = "left","right"
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos [set every repeat] = (navonpose, 0)
      saveStartStop = False
      sf = None
      size = (8, 8)
      startVal [time (s)] = 0.65
      stopVal [duration (s)] = 2.85
      units = cm
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    CodeComponent getcorrect
      Code Type = Auto->JS
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      End Routine:
        if key_resp.keys==correctAns:
            navonblok1.addData('correct',1);
        elif correctAns==None:
            navonblok1.addData('correct',1);
        else:
            navonblok1.addData('correct',0)
  Routine navon_2
    ImageComponent letter_3
      image [set every repeat] = $soru
      pos [set every repeat] = (navonpose, 0)
      saveStartStop = False
      size = (8,8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.15
      units = cm
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    TextComponent fix_3
      color = $[-1.0, -1.0, -1.0]
      letterHeight = 1.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = cm
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    KeyboardComponent key_resp_5
      allowedKeys = "left","right"
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    NoiseStimComponent noise_5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos [set every repeat] = (navonpose, 0)
      saveStartStop = False
      sf = None
      size = (8, 8)
      startVal [time (s)] = 0.65
      stopVal [duration (s)] = 2.75
      units = cm
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    CodeComponent getcorrect_2
      Code Type = Auto->JS
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      End Routine:
        if key_resp_5.keys==correctAns:
            navonblok2.addData('correct',1);
        elif correctAns==None:
            navonblok2.addData('correct',1);
        else:
            navonblok2.addData('correct',0)
  Routine navon_3
    ImageComponent letter_4
      image [set every repeat] = $soru
      pos [set every repeat] = (navonpose, 0)
      saveStartStop = False
      size = (8,8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.15
      units = cm
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    TextComponent fix_4
      color = $[-1.0, -1.0, -1.0]
      letterHeight = 1.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = cm
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    KeyboardComponent key_resp_6
      allowedKeys = "left","right"
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    NoiseStimComponent noise_6
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos [set every repeat] = (navonpose, 0)
      saveStartStop = False
      sf = None
      size = (8, 8)
      startVal [time (s)] = 0.65
      stopVal [duration (s)] = 2.75
      units = cm
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    CodeComponent getcorrect_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_6.keys==correctAns:
            navonblok3.addData('correct',1);
        elif correctAns==None:
            navonblok3.addData('correct',1);
        else:
            navonblok3.addData('correct',0)
  Routine navon_4
    ImageComponent letter_5
      image [set every repeat] = $soru
      pos [set every repeat] = (navonpose, 0)
      saveStartStop = False
      size = (8,8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.15
      units = cm
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    TextComponent fix_5
      color = $[-1.0, -1.0, -1.0]
      letterHeight = 1.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = cm
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    KeyboardComponent key_resp_7
      allowedKeys = "left","right"
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    NoiseStimComponent noise_7
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      pos [set every repeat] = (navonpose, 0)
      saveStartStop = False
      sf = None
      size = (8, 8)
      startVal [time (s)] = 0.65
      stopVal [duration (s)] = 2.75
      units = cm
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    CodeComponent getcorrect_4
      Code Type = Auto->JS
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      End Routine:
        if key_resp_7.keys==correctAns:
            navonblok4.addData('correct',1);
        elif correctAns==None:
            navonblok4.addData('correct',1);
        else:
            navonblok4.addData('correct',0)
  Routine subtracct
    CodeComponent code_4
      Code Type = Py
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      Before Experiment:
        from numpy import subtract
      End Experiment:
        #subb.saveAsExcel(filename + '.xlsx', sheetName='subb',
        #    stimOut=params, dataOut=['all_raw'])
      End Routine:
        duygufark = subtract(duygu1.data["slider.response"], duygu3.data["slider.response"]).tolist()
        subbb.addData("duygu fark", duygufark)
        rumifark = subtract(brsi1.data["slider_2.response"], brsi3.data["slider_2.response"]).tolist()
        subbb.addData("ruminasyon fark", rumifark)
        #duygufarkkaygi = duygular[4] - duygular[14]
        #subb.addData("duygu fark kaygı", duygufarkkaygi)
Flow
  Routine expinfo
  LoopInitiator isim loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine onam
  LoopTerminator isim
  Routine birinciasamainfo
  LoopInitiator brsi1 loopType="TrialHandler"
    conditionsFile = bsri.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'index': 1, 'itemText': '1. Şu anda duygu durumum hakkında düşünüyorum.\xa0', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': '0,10,20,30,40,50,60,70,80,90,100', 'layout': 'horiz'},
      {'index': 2, 'itemText': '2. Şu anda\xa0neden bu şekilde tepki gösterdiğimi merak ediyorum.\xa0', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': '0,10,20,30,40,50,60,70,80,90,100', 'layout': 'horiz'},
      {'index': 3, 'itemText': '3. Şu anda neden hep\xa0bu şekilde hissettiğimi\xa0merak ediyorum.\xa0', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': '0,10,20,30,40,50,60,70,80,90,100', 'layout': 'horiz'},
      {'index': 4, 'itemText': '4. Şu anda “Neden başka insanlarda olmayan sorunlara sahibim?”\xa0diye düşünüyorum.\xa0', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': '0,10,20,30,40,50,60,70,80,90,100', 'layout': 'horiz'},
      {'index': 5, 'itemText': '5. Şu anda yakın zamanda söylediğim ya da yaptığım şeyleri\xa0zihnimde\xa0tekrar ediyorum.\xa0', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': '0,10,20,30,40,50,60,70,80,90,100', 'layout': 'horiz'},
      {'index': 6, 'itemText': '6. Şu anda “İşlerimi\xa0neden daha iyi idare edemiyorum?” diye\xa0düşünüyorum.\xa0', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': '0,10,20,30,40,50,60,70,80,90,100', 'layout': 'horiz'}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
    Routine ruminasyon
  LoopTerminator brsi1
  LoopInitiator duygu1 loopType="TrialHandler"
    conditionsFile = duygusorular.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'negatif': 'Hiç üzgün değilim.', 'pozitif': 'Son derece üzgünüm.', 'notr': 'ÜZÜNTÜ'},
      {'negatif': 'Hiç durgun değilim.', 'pozitif': 'Son derece durgunum.', 'notr': 'DURGUNLUK'},
      {'negatif': 'Hiç gergin değilim.', 'pozitif': 'Son derece gerginim.', 'notr': 'GERGİNLİK'},
      {'negatif': 'Hiç öfkeli değilim.', 'pozitif': 'Son derece öfkeliyim.', 'notr': 'ÖFKE'},
      {'negatif': 'Hiç kaygılı değilim.', 'pozitif': 'Son derece kaygılıyım.', 'notr': 'KAYGI'},
      {'negatif': 'Hiç hırslı değilim.', 'pozitif': 'Son derece hırslıyım.', 'notr': 'HIRS'},
      {'negatif': 'Hiç memnun değilim.', 'pozitif': 'Son derece memnunum.', 'notr': 'MEMNUNİYET'},
      {'negatif': 'Hiç mutlu değilim.', 'pozitif': 'Son derece mutluyum.', 'notr': 'MUTLULUK'},
      {'negatif': 'Hiç neşeli değilim.', 'pozitif': 'Son derece neşeliyim.', 'notr': 'NEŞE'},
      {'negatif': 'Hiç sevinçli değilim.', 'pozitif': 'Son derece sevinçliyim.', 'notr': 'SEVİNÇ'},
      {'negatif': 'Hiç hevesli değilim.', 'pozitif': 'Son derece hevesliyim.', 'notr': 'HEVES'}]
    Routine duygular
  LoopTerminator duygu1
  Routine session_end
  Routine navonbilgi
  LoopInitiator denemeloop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine blank
    LoopInitiator navon2deneme loopType="TrialHandler"
      conditionsFile = navon2.xlsx
      loopType = random
      nReps = 4
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      conditions:
        [{'soru': 'He.png', 'dogru': 'H', 'state': 'global', 'key': 'left'},
        {'soru': 'Te.png', 'dogru': 'T', 'state': 'global', 'key': 'right'},
        {'soru': 'Hp.png', 'dogru': 'H', 'state': 'global', 'key': 'left'},
        {'soru': 'Tp.png', 'dogru': 'T', 'state': 'global', 'key': 'right'},
        {'soru': 'Eh.png', 'dogru': 'H', 'state': 'local', 'key': 'left'},
        {'soru': 'Et.png', 'dogru': 'T', 'state': 'local', 'key': 'right'},
        {'soru': 'Ph.png', 'dogru': 'H', 'state': 'local', 'key': 'left'},
        {'soru': 'Pt.png', 'dogru': 'T', 'state': 'local', 'key': 'right'}]
      Routine navon_pilot
      Routine dogru_2
    LoopTerminator navon2deneme
    Routine pilot_navon
  LoopTerminator denemeloop
  Routine blank
  LoopInitiator navonblok1 loopType="TrialHandler"
    conditionsFile = navon.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'soru': 'Tl.png', 'correctAns': 'left', 'state': 'global', 'navonpose': 5},
      {'soru': 'Tf.png', 'correctAns': 'left', 'state': 'global', 'navonpose': 5},
      {'soru': 'Hl.png', 'correctAns': 'right', 'state': 'global', 'navonpose': 5},
      {'soru': 'Hf.png', 'correctAns': 'right', 'state': 'global', 'navonpose': 5},
      {'soru': 'Lt.png', 'correctAns': 'left', 'state': 'local', 'navonpose': 5},
      {'soru': 'Lh.png', 'correctAns': 'right', 'state': 'local', 'navonpose': 5},
      {'soru': 'Ft.png', 'correctAns': 'left', 'state': 'local', 'navonpose': 5},
      {'soru': 'Fh.png', 'correctAns': 'right', 'state': 'local', 'navonpose': 5},
      {'soru': 'Ht.png', 'correctAns': None, 'state': 'both', 'navonpose': 5},
      {'soru': 'Th.png', 'correctAns': None, 'state': 'both', 'navonpose': 5},
      {'soru': 'Tl.png', 'correctAns': 'left', 'state': 'global', 'navonpose': -5},
      {'soru': 'Tf.png', 'correctAns': 'left', 'state': 'global', 'navonpose': -5},
      {'soru': 'Hl.png', 'correctAns': 'right', 'state': 'global', 'navonpose': -5},
      {'soru': 'Hf.png', 'correctAns': 'right', 'state': 'global', 'navonpose': -5},
      {'soru': 'Lt.png', 'correctAns': 'left', 'state': 'local', 'navonpose': -5},
      {'soru': 'Lh.png', 'correctAns': 'right', 'state': 'local', 'navonpose': -5},
      {'soru': 'Ft.png', 'correctAns': 'left', 'state': 'local', 'navonpose': -5},
      {'soru': 'Fh.png', 'correctAns': 'right', 'state': 'local', 'navonpose': -5},
      {'soru': 'Ht.png', 'correctAns': None, 'state': 'both', 'navonpose': -5},
      {'soru': 'Th.png', 'correctAns': None, 'state': 'both', 'navonpose': -5}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
    Routine navon_1
  LoopTerminator navonblok1
  Routine interval
  Routine blank
  LoopInitiator navonblok2 loopType="TrialHandler"
    conditionsFile = navon.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'soru': 'Tl.png', 'correctAns': '"left"', 'state': 'global', 'navonpose': 5},
      {'soru': 'Tf.png', 'correctAns': '"left"', 'state': 'global', 'navonpose': 5},
      {'soru': 'Hl.png', 'correctAns': '"right"', 'state': 'global', 'navonpose': 5},
      {'soru': 'Hf.png', 'correctAns': '"right"', 'state': 'global', 'navonpose': 5},
      {'soru': 'Lt.png', 'correctAns': '"left"', 'state': 'local', 'navonpose': 5},
      {'soru': 'Lh.png', 'correctAns': '"right"', 'state': 'local', 'navonpose': 5},
      {'soru': 'Ft.png', 'correctAns': '"left"', 'state': 'local', 'navonpose': 5},
      {'soru': 'Fh.png', 'correctAns': '"right"', 'state': 'local', 'navonpose': 5},
      {'soru': 'Ht.png', 'correctAns': None, 'state': None, 'navonpose': 5},
      {'soru': 'Th.png', 'correctAns': None, 'state': None, 'navonpose': 5},
      {'soru': 'Tl.png', 'correctAns': '"left"', 'state': 'global', 'navonpose': -5},
      {'soru': 'Tf.png', 'correctAns': '"left"', 'state': 'global', 'navonpose': -5},
      {'soru': 'Hl.png', 'correctAns': '"right"', 'state': 'global', 'navonpose': -5},
      {'soru': 'Hf.png', 'correctAns': '"right"', 'state': 'global', 'navonpose': -5},
      {'soru': 'Lt.png', 'correctAns': '"left"', 'state': 'local', 'navonpose': -5},
      {'soru': 'Lh.png', 'correctAns': '"right"', 'state': 'local', 'navonpose': -5},
      {'soru': 'Ft.png', 'correctAns': '"left"', 'state': 'local', 'navonpose': -5},
      {'soru': 'Fh.png', 'correctAns': '"right"', 'state': 'local', 'navonpose': -5},
      {'soru': 'Ht.png', 'correctAns': None, 'state': None, 'navonpose': -5}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
    Routine navon_2
  LoopTerminator navonblok2
  Routine session_end
  Routine cattellbilgi
  LoopInitiator cattelll loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = cattellfalse.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'soru': '1.png', 'cevapA': '1a.png', 'cevapB': '1b.png', 'cevapC': '1c.png', 'cevapD': '1d.png', 'cevapE': '1e.png', 'cevapF': '1f.png', 'size': (22, 5), 'pose': (0, 5), 'pose2': (0, 7), 'correct': 'wrong.wav', 'correct_text': 'Yanlış!', 'poses': (0, -1), 'instruction': 'Yukarıdaki örüntüyü tamamlayacak şeklin üzerine tıklayın.'},
      {'soru': '2.png', 'cevapA': '2a.png', 'cevapB': '2b.png', 'cevapC': '2c.png', 'cevapD': '2d.png', 'cevapE': '2e.png', 'cevapF': '2f.png', 'size': (22, 5), 'pose': (0, 5), 'pose2': (0, 7), 'correct': 'wrong.wav', 'correct_text': 'Yanlış!', 'poses': (0, -1), 'instruction': 'Yukarıdaki örüntüyü tamamlayacak şeklin üzerine tıklayın.'},
      {'soru': '3.png', 'cevapA': '3a.png', 'cevapB': '3b.png', 'cevapC': '3c.png', 'cevapD': '3d.png', 'cevapE': '3e.png', 'cevapF': '3f.png', 'size': (22, 5), 'pose': (0, 5), 'pose2': (0, 7), 'correct': 'correct.wav', 'correct_text': 'Doğru!', 'poses': (0, -1), 'instruction': 'Yukarıdaki örüntüyü tamamlayacak şeklin üzerine tıklayın.'},
      {'soru': '4.png', 'cevapA': '4a.png', 'cevapB': '4b.png', 'cevapC': '4c.png', 'cevapD': '4d.png', 'cevapE': '4e.png', 'cevapF': '4f.png', 'size': (22, 5), 'pose': (0, 5), 'pose2': (0, 7), 'correct': 'wrong.wav', 'correct_text': 'Yanlış!', 'poses': (0, -1), 'instruction': 'Yukarıdaki örüntüyü tamamlayacak şeklin üzerine tıklayın.'}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
    Routine cattell6
    Routine feedback
  LoopTerminator cattelll
  LoopInitiator cattell2 loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = cattell2false.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'soru_catell': 'a b c v y z ç d e v y z f g h ?', 'cvp1': '   ı', 'cvp2': '   i', 'cvp3': '   j', 'cvp4': '   v', 'cvp5': '   y', 'correct': 'correct.wav', 'correct_text': 'Doğru!'},
      {'soru_catell': 'a b c c ç d e e f g h h ı i j ?', 'cvp1': '   ı', 'cvp2': '   i', 'cvp3': '   j', 'cvp4': '   k', 'cvp5': '   l', 'correct': 'wrong.wav', 'correct_text': 'Yanlış!'},
      {'soru_catell': 'a b c a b c ç a b c ç d ?', 'cvp1': '   a', 'cvp2': '   b', 'cvp3': '   c', 'cvp4': '   ç', 'cvp5': '   d', 'correct': 'wrong.wav', 'correct_text': 'Yanlış!'},
      {'soru_catell': 'a b c a b ç a b d a b e ?', 'cvp1': '   a', 'cvp2': '   b', 'cvp3': '   c', 'cvp4': '   f', 'cvp5': '   g', 'correct': 'wrong.wav', 'correct_text': 'Yanlış!'},
      {'soru_catell': 'a c d f h i k ?', 'cvp1': '   i', 'cvp2': '   j', 'cvp3': '   k', 'cvp4': '   l', 'cvp5': '   m', 'correct': 'wrong.wav', 'correct_text': 'Yanlış!'},
      {'soru_catell': 'f g f g c ç h ı h ı c ç i j ?', 'cvp1': '   c', 'cvp2': '   ç', 'cvp3': '   i', 'cvp4': '   j', 'cvp5': '   k', 'correct': 'wrong.wav', 'correct_text': 'Yanlış!'},
      {'soru_catell': 'a b a c ç c d e d f g f h ı ?', 'cvp1': '   f', 'cvp2': '   g', 'cvp3': '   h', 'cvp4': '   ı', 'cvp5': '   i', 'correct': 'wrong.wav', 'correct_text': 'Yanlış!'},
      {'soru_catell': 'a b c v y z ç d e v y z f g h ?', 'cvp1': '   ı', 'cvp2': '   i', 'cvp3': '   j', 'cvp4': '   v', 'cvp5': '   y', 'correct': 'correct.wav', 'correct_text': 'Doğru!'}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
    Routine cattell2_2
    Routine feedback
  LoopTerminator cattell2
  Routine toplampuan
  Routine session_end
  Routine testbilgi
  LoopInitiator brsi2 loopType="TrialHandler"
    conditionsFile = bsri.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'index': 1, 'itemText': 'Şu anda duygu durumum hakkında düşünüyorum.\xa0'},
      {'index': 2, 'itemText': 'Şu anda\xa0neden bu şekilde tepki gösterdiğimi merak ediyorum.\xa0'},
      {'index': 3, 'itemText': 'Şu anda neden hep\xa0bu şekilde hissettiğimi\xa0merak ediyorum.\xa0'},
      {'index': 4, 'itemText': 'Şu anda “Neden başka insanlarda olmayan sorunlara sahibim?”\xa0diye düşünüyorum.\xa0'},
      {'index': 5, 'itemText': 'Şu anda yakın zamanda söylediğim ya da yaptığım şeyleri\xa0zihnimde\xa0tekrar ediyorum.\xa0'},
      {'index': 6, 'itemText': 'Şu anda “İşlerimi\xa0neden daha iyi idare edemiyorum?” diye\xa0düşünüyorum.\xa0'},
      {'index': 7, 'itemText': 'Şu anda\xa0benim için\xa0kendimle ilgili\xa0olumsuz düşünceleri\xa0susturmak\xa0zor.\xa0'},
      {'index': 8, 'itemText': 'Şu anda neden daha iyi\xa0bir\xa0şekilde tepki\xa0veremediğimi merak ediyorum.\xa0'}]
    Routine ruminasyon
  LoopTerminator brsi2
  LoopInitiator hataloop loopType="TrialHandler"
    conditionsFile = hataruminasyon.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'index': 1, 'itemText': '1. Ne ölçüde “Nasıl bu kadar aptal olabildim?” diye düşündünüz?', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': 'Hiçbir zaman, Biraz, Orta düzeyde, Çok fazla', 'layout': 'horiz'},
      {'index': 2, 'itemText': '2. Ne ölçüde “Neden böyle hatalar yapmayı durduramıyorum?” diye düşündünüz?', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': 'Hiçbir zaman, Biraz, Orta düzeyde, Çok fazla', 'layout': 'horiz'},
      {'index': 3, 'itemText': '3. Ne ölçüde hâlâ hatanız hakkında düşünüyor ve keşke daha iyi olsaydı diyorsunuz?', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': 'Hiçbir zaman, Biraz, Orta düzeyde, Çok fazla', 'layout': 'horiz'},
      {'index': 4, 'itemText': '4. Ne ölçüde “Neden başkalarının yapmadığı hataları ben yapıyorum?” diye düşündünüz?', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': 'Hiçbir zaman, Biraz, Orta düzeyde, Çok fazla', 'layout': 'horiz'},
      {'index': 5, 'itemText': '5. Ne ölçüde yaptığınız diğer hatalar hakkında düşündünüz?', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': 'Hiçbir zaman, Biraz, Orta düzeyde, Çok fazla', 'layout': 'horiz'},
      {'index': 6, 'itemText': '6. Ne ölçüde “Neden bunun olacağını göremedim ve bundan kaçınmanın yollarını bulamadım?” diye düşündünüz?', 'itemWidth': 1, 'type': 'radio', 'responseWidth': 1, 'options': 'Hiçbir zaman, Biraz, Orta düzeyde, Çok fazla', 'layout': 'horiz'}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
    Routine hataruminasyon
  LoopTerminator hataloop
  LoopInitiator duygu2 loopType="TrialHandler"
    conditionsFile = duygusorular.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'negatif': 'Hiç üzgün değilim.', 'pozitif': 'Son derece üzgünüm.', 'notr': 'ÜZÜNTÜ'},
      {'negatif': 'Hiç durgun değilim.', 'pozitif': 'Son derece durgunum.', 'notr': 'DURGUNLUK'},
      {'negatif': 'Hiç gergin değilim.', 'pozitif': 'Son derece gerginim.', 'notr': 'GERGİNLİK'},
      {'negatif': 'Hiç öfkeli değilim.', 'pozitif': 'Son derece öfkeliyim.', 'notr': 'ÖFKE'},
      {'negatif': 'Hiç kaygılı değilim.', 'pozitif': 'Son derece kaygılıyım.', 'notr': 'KAYGI'},
      {'negatif': 'Hiç hırslı değilim.', 'pozitif': 'Son derece hırslıyım.', 'notr': 'HIRS'},
      {'negatif': 'Hiç memnun değilim.', 'pozitif': 'Son derece memnunum.', 'notr': 'MEMNUNİYET'},
      {'negatif': 'Hiç mutlu değilim.', 'pozitif': 'Son derece mutluyum.', 'notr': 'MUTLULUK'},
      {'negatif': 'Hiç neşeli değilim.', 'pozitif': 'Son derece neşeliyim.', 'notr': 'NEŞE'},
      {'negatif': 'Hiç sevinçli değilim.', 'pozitif': 'Son derece sevinçliyim.', 'notr': 'SEVİNÇ'},
      {'negatif': 'Hiç hevesli değilim.', 'pozitif': 'Son derece hevesliyim.', 'notr': 'HEVES'}]
    Routine duygular
  LoopTerminator duygu2
  Routine navonbilgi2
  Routine blank
  LoopInitiator navonblok3 loopType="TrialHandler"
    conditionsFile = navon.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine navon_3
  LoopTerminator navonblok3
  Routine interval
  Routine blank
  LoopInitiator navonblok4 loopType="TrialHandler"
    conditionsFile = navon.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine navon_4
  LoopTerminator navonblok4
  Routine session_end
  LoopInitiator toplamlar loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine expfin
  LoopTerminator toplamlar
  Routine finnishhhhhh
